PsychoPy2experiment version="2021.1.4"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = untitled1
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Routines
  Routine instr
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = space to start
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    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine tri
  Routine resp
    TextboxComponent textbox
      bold = False
      editable = True
      letterHeight = 0.05
      startVal [time (s)] = 0.5
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.5
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    TextComponent text_2
      letterHeight = 0.1
      pos = (0, -0.4)
      startVal [time (s)] = 0.5
      text = space to next.
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  Routine trial
    ImageComponent image
      image [set every repeat] = $stim_name
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.5
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    CodeComponent trial_code
      Code Type = Auto->JS
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      Begin Experiment:
        count_trial = 0
        count_rest = 5
      Begin Routine:
        count_trial = count_trial + 1
        if count_trial % count_rest == 0:
            is_rest = 1
        else:
            is_rest = 0
  Routine Rest
    TextComponent rest_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        rest.
        space to start.
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine instr
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = stim_info.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'trial_N': 0, 'stim_name': 'Stim_0.png', 'ichiyen_N': 8, 'juuyen_N': 7, 'coin_N': 15, 'total_yen': 78},
      {'trial_N': 1, 'stim_name': 'Stim_1.png', 'ichiyen_N': 4, 'juuyen_N': 3, 'coin_N': 7, 'total_yen': 34},
      {'trial_N': 2, 'stim_name': 'Stim_2.png', 'ichiyen_N': 5, 'juuyen_N': 4, 'coin_N': 9, 'total_yen': 45},
      {'trial_N': 3, 'stim_name': 'Stim_3.png', 'ichiyen_N': 8, 'juuyen_N': 4, 'coin_N': 12, 'total_yen': 48},
      {'trial_N': 4, 'stim_name': 'Stim_4.png', 'ichiyen_N': 9, 'juuyen_N': 6, 'coin_N': 15, 'total_yen': 69},
      {'trial_N': 5, 'stim_name': 'Stim_5.png', 'ichiyen_N': 5, 'juuyen_N': 7, 'coin_N': 12, 'total_yen': 75},
      {'trial_N': 6, 'stim_name': 'Stim_6.png', 'ichiyen_N': 6, 'juuyen_N': 5, 'coin_N': 11, 'total_yen': 56},
      {'trial_N': 7, 'stim_name': 'Stim_7.png', 'ichiyen_N': 6, 'juuyen_N': 6, 'coin_N': 12, 'total_yen': 66},
      {'trial_N': 8, 'stim_name': 'Stim_8.png', 'ichiyen_N': 7, 'juuyen_N': 1, 'coin_N': 8, 'total_yen': 17},
      {'trial_N': 9, 'stim_name': 'Stim_9.png', 'ichiyen_N': 9, 'juuyen_N': 6, 'coin_N': 15, 'total_yen': 69},
      {'trial_N': 10, 'stim_name': 'Stim_10.png', 'ichiyen_N': 1, 'juuyen_N': 6, 'coin_N': 7, 'total_yen': 61},
      {'trial_N': 11, 'stim_name': 'Stim_11.png', 'ichiyen_N': 9, 'juuyen_N': 6, 'coin_N': 15, 'total_yen': 69},
      {'trial_N': 12, 'stim_name': 'Stim_12.png', 'ichiyen_N': 6, 'juuyen_N': 7, 'coin_N': 13, 'total_yen': 76},
      {'trial_N': 13, 'stim_name': 'Stim_13.png', 'ichiyen_N': 4, 'juuyen_N': 3, 'coin_N': 7, 'total_yen': 34}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
    Routine trial
    Routine resp
    LoopInitiator trials_2 loopType="TrialHandler"
      loopType = random
      nReps = is_rest
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      Routine Rest
    LoopTerminator trials_2
  LoopTerminator trials
